PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = soloprojectsharanya
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    TextComponent studytext
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_words
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamilair"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 1.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $test_words
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Press Y if it is a word, Press N if it is not a word
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study words solo project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'Halle Berry', 'con': 'cs'},
      {'study_words': 'Vin Diesel', 'con': 'cs'},
      {'study_words': 'Robin Cook', 'con': 'cs'},
      {'study_words': 'Stephen King', 'con': 'cs'},
      {'study_words': 'Tom Cruise', 'con': 'cs'},
      {'study_words': 'Emma Stone', 'con': 'cs'},
      {'study_words': 'James Bond', 'con': 'cs'},
      {'study_words': 'Rachel Green', 'con': 'cs'},
      {'study_words': 'George Bush', 'con': 'cs'},
      {'study_words': 'John Legend', 'con': 'cs'},
      {'study_words': 'Kate Winslow', 'con': 'c'},
      {'study_words': 'Dwayne Johnson', 'con': 'c'},
      {'study_words': 'Oprah Winfer', 'con': 'c'},
      {'study_words': 'Christiano Ronaldo', 'con': 'c'},
      {'study_words': 'Lindsay Lohan', 'con': 'c'},
      {'study_words': 'Mariah Carey', 'con': 'c'},
      {'study_words': 'Jennifer Aniston', 'con': 'c'},
      {'study_words': 'daniel carr', 'con': 'un'},
      {'study_words': 'oliver murphy ', 'con': 'un'},
      {'study_words': "Amelia O'Brien", 'con': 'un'},
      {'study_words': 'Rita Mulaney', 'con': 'un'},
      {'study_words': 'Garcia Rodiguez', 'con': 'un'},
      {'study_words': 'Terrence Peterson', 'con': 'un'},
      {'study_words': 'Allan Carter', 'con': 'un'}]
    Routine trial
  LoopTerminator trials
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test words solo project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'Diesel', 'cond': 'cwp'},
      {'test_words': 'Cook', 'cond': 'cwp'},
      {'test_words': 'King', 'cond': 'cwp'},
      {'test_words': 'Cruise', 'cond': 'cwp'},
      {'test_words': 'Stone', 'cond': 'cwp'},
      {'test_words': 'Green', 'cond': 'cwp'},
      {'test_words': 'Bush', 'cond': 'cwp'},
      {'test_words': 'Legend', 'cond': 'cwp'},
      {'test_words': 'Bullock ', 'cond': 'cwu'},
      {'test_words': 'Callous', 'cond': 'cwu'},
      {'test_words': 'Cajole', 'cond': 'cwu'},
      {'test_words': 'Aquity', 'cond': 'cwu'},
      {'test_words': 'Dispel', 'cond': 'cwu'},
      {'test_words': 'Spouse', 'cond': 'cwu'},
      {'test_words': 'laptop', 'cond': 'cwu'},
      {'test_words': 'Sniff', 'cond': 'cwu'},
      {'test_words': 'thrade', 'cond': 'pw'},
      {'test_words': 'abary', 'cond': 'pw'},
      {'test_words': 'ciphere', 'cond': 'pw'},
      {'test_words': 'demical', 'cond': 'pw'},
      {'test_words': 'exsess', 'cond': 'pw'},
      {'test_words': 'frambos', 'cond': 'pw'},
      {'test_words': 'fuguil', 'cond': 'pw'},
      {'test_words': 'gesting', 'cond': 'pw'},
      {'test_words': 'gweet', 'cond': 'pw'},
      {'test_words': 'hawyk', 'cond': 'pw'},
      {'test_words': 'infrate', 'cond': 'pw'},
      {'test_words': 'banc', 'cond': 'pw'},
      {'test_words': 'poing', 'cond': 'pw'},
      {'test_words': 'hoory', 'cond': 'pw'},
      {'test_words': 'biled', 'cond': 'pw'},
      {'test_words': 'contrivial', 'cond': 'pw'}]
    Routine test
  LoopTerminator trials_2
