PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay_discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discountingconditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 59, 'future_reward': 72, 'delay': 18},
      {'reward_today': 43, 'future_reward': 73, 'delay': 72},
      {'reward_today': 20, 'future_reward': 87, 'delay': 3},
      {'reward_today': 53, 'future_reward': 86, 'delay': 109},
      {'reward_today': 40, 'future_reward': 70, 'delay': 132},
      {'reward_today': 40, 'future_reward': 75, 'delay': 163},
      {'reward_today': 67, 'future_reward': 81, 'delay': 100},
      {'reward_today': 52, 'future_reward': 70, 'delay': 112},
      {'reward_today': 26, 'future_reward': 72, 'delay': 143},
      {'reward_today': 31, 'future_reward': 85, 'delay': 97},
      {'reward_today': 20, 'future_reward': 91, 'delay': 55},
      {'reward_today': 45, 'future_reward': 86, 'delay': 54},
      {'reward_today': 49, 'future_reward': 96, 'delay': 27},
      {'reward_today': 47, 'future_reward': 89, 'delay': 16},
      {'reward_today': 50, 'future_reward': 98, 'delay': 3},
      {'reward_today': 50, 'future_reward': 84, 'delay': 139},
      {'reward_today': 61, 'future_reward': 76, 'delay': 31},
      {'reward_today': 60, 'future_reward': 89, 'delay': 14},
      {'reward_today': 26, 'future_reward': 74, 'delay': 136},
      {'reward_today': 43, 'future_reward': 86, 'delay': 172}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
    Routine trial
  LoopTerminator trials
